CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasOtherModules:false

Images:[module_num:1|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesstartswith "")

Metadata:[module_num:2|svn_version:\'Unknown\'|variable_revision_number:6|show_window:False|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<OrigDNA>.*)$
    Regular expression to extract from folder name:(?P<folder>.*)
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere:\\g<DataRoot>
    Match file and image metadata:
    Use case insensitive matching?:No
    Metadata file name:
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:\'Unknown\'|variable_revision_number:8|show_window:False|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
    Maximum intensity max:

Groups:[module_num:4|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None

IdentifyPrimaryObjects:[module_num:5|svn_version:\'Unknown\'|variable_revision_number:13|show_window:False|notes:\x5B\'BBBC039 nuclei\x3A Otsu 2-class style settings for fair OptiCell comparison\'|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Threshold strategy:Global
    Thresholding method:Otsu
    Two-class or three-class thresholding?:Two classes
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Log transform before thresholding?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects in low intensity regions:Default
    Size of smoothing filter:10
    Maximum accepted overlap of bounding boxes:0.5

ConvertObjectsToImage:[module_num:6|svn_version:\'Unknown\'|variable_revision_number:1|show_window:False|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:Nuclei
    Name the output image:NucleiLabels
    Select the color format:uint16

SaveImages:[module_num:7|svn_version:\'Unknown\'|variable_revision_number:13|show_window:False|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:NucleiLabels
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp_labels
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:8|svn_version:\'Unknown\'|variable_revision_number:13|show_window:False|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the column delimiter:Comma (",")
    Output file location:Default Output Folder\x7C
    Add a prefix to file names?:Yes
    Filename prefix:CP_
    Overwrite existing files without warning?:Yes
    Add image metadata columns to your object data file?:No
    Representation of Nan/Inf:NaN
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Create a GenePattern GCT file?:No
